CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CH2")
    Name to assign these images:sensor
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CH3")
    Name to assign these images:ref
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['']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enabled:False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
    Select the input image:sensor
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:1
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    Image name:Channel1
    Channel number:2
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    Image name:Channel2

Threshold:[module_num:6|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enabled:False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
    Select the input image:Channel2
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:ref
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):5,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
Watershed:[module_num:8|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enabled:False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
    Select the input image:MaskBlue
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

MaskImage:[module_num:9|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
    Select the input image:sensor
    Name the output image:sensor_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:cells
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    Invert the mask?:Yes

MaskImage:[module_num:10|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
    Select the input image:ref
    Name the output image:ref_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:cells
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:11|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
    Select images to measure:ref_masked, sensor_masked
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
ImageMath:[module_num:12|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enabled:False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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
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    Multiply the first image by:1.0
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    Image or measurement?:Image
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    Multiply the second image by:1.0
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
ImageMath:[module_num:13|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:sensor_subtracted
    Image or measurement?:Image
    Select the first image:sensor
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:Channel2
    Multiply the second image by:1.0
    Measurement:Intensity_MeanIntensity_sensor_masked

ImageMath:[module_num:14|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ref_subtracted
    Image or measurement?:Image
    Select the first image:ref
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
    Select the second image:Channel2
    Multiply the second image by:1.0
    Measurement:Intensity_MeanIntensity_ref_masked

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:ref_subtracted, sensor_subtracted
    Select objects to measure:cells

CalculateMath:[module_num:16|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
    Name the output measurement:sensor_divided_by_ref
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:cells
    Select the numerator measurement:Intensity_IntegratedIntensity_sensor_subtracted
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:cells
    Select the denominator measurement:Intensity_IntegratedIntensity_ref_subtracted
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Volumes/data/collection/keyence/ryo/20240502/DFMO_72h_E100u1m10mA100u1m10mx3
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:cells|Math_sensor_divided_by_ref
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:cells
    Combine these object measurements with those of the previous object?:No
    File name:DATA.csv
    Use the object name for the file name?:No
